PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Data filename = u'%s_angel_paradigm_builder_%s' % (engine.CURRENT_ARGS.participant if ('engine' in globals() and hasattr(engine, 'CURRENT_ARGS') and engine.CURRENT_ARGS) else expInfo['participant'], expInfo['date'])
  Experiment info = {"participant": "test", "session": "001"}
  Full-screen size = [1280, 800]
  Monitor = testMonitor
  Save csv file = True
  Saved data folder = data
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  expName = angel_paradigm_builder
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Routines
  Routine Init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import sys
        from pathlib import Path
        import angel_paradigm_coder as engine
        args = engine.parse_args()
        if getattr(args, 'export_trigger_codes', None):
            out_p = Path(args.export_trigger_codes)
            ms = engine.MarkerSender(args, None, None)
            ms.save_trigger_codes_json(out_p, participant=getattr(args, 'participant', 'test'))
            print(f'Trigger codes successfully exported to {out_p}')
            sys.exit(0)
        if not args.used_cli_config and not getattr(args, 'no_config_dialog', False):
            args = engine.show_config_dialog(args)
            engine.save_config_defaults(engine.args_to_config(args))
        engine.CURRENT_ARGS = args
      Begin Experiment:
        import random as std_random
        args = engine.CURRENT_ARGS
        levels = [level.strip() for level in args.levels.split(',') if level.strip()]
        engine.validate_config(args)
        # Synchronize KEYS and participant ID
        engine.KEYS['left'] = engine.parse_keys_list(args.left_keys)
        engine.KEYS['right'] = engine.parse_keys_list(args.right_keys)
        engine.KEYS['continue'] = engine.parse_keys_list(getattr(args, 'continue_keys', 'any'))
        engine.KEYS['trigger'] = engine.parse_keys_list(args.trigger_keys)
        KEYS = engine.KEYS
        expInfo['participant'] = args.participant
        thisExp.extraInfo['participant'] = args.participant
        exp_clock = core.Clock()
        markers = engine.MarkerSender(args, core, exp_clock)
        rng = std_random.Random(args.seed)
        assets_by_level = {lvl: engine.load_assets(args.resource_root / engine.LEVEL_TEMPLATES[lvl], args.language) for lvl in levels}
        assets = assets_by_level[levels[0]]
        trial_counter = 0
        main_session_rows = []
        # Adapter so engine can log directly to PsychoPy ExperimentHandler
        class _PsyWriter:
            def writerow(self, row):
                for k, v in row.items():
                    thisExp.addData(k, v)
                thisExp.nextEntry()
        class _PsyFile:
            def flush(self): pass
        psy_writer = _PsyWriter()
        psy_file = _PsyFile()
      End Experiment:
        # Stop and delete all cached audio objects to drain Core Audio HALC queue
        try:
            for _snd in list(audio_cache.values()):
                _snd.stop()
            audio_cache.clear()
        except (NameError, Exception):
            pass
        import time as _time
        _time.sleep(0.5)
        markers.close()
  Routine Instructions
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    CodeComponent instruction_code
      Code Type = Py
      Begin Experiment:
        inst_audio = None
      Begin Routine:
        if args.skip_instructions:
            continueRoutine = False
        else:
            markers.send('instruction_start', 101)
            inst_img = str(assets['language'] / 'InstructionLevel1.PNG')
            instruction_image.setImage(inst_img)
            if args.audio_instructions:
                inst_audio_path = assets['language'] / 'InstructionLevel1.mp3'
                if inst_audio_path.exists():
                    try:
                        inst_audio = sound.Sound(str(inst_audio_path))
                        inst_audio.play()
                    except Exception:
                        inst_audio = None
      End Routine:
        markers.send('instruction_end', 102)
        if 'inst_audio' in locals() and inst_audio:
            inst_audio.stop()
    ImageComponent instruction_image
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/InstructionLevel1.PNG
      size = (1.333, 1.0)
      units = height
      startVal [time (s)] = 0.0
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    KeyboardComponent instruction_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
  Routine PracticeRoutine
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    CodeComponent practice_code
      Code Type = Py
      Begin Routine:
        # Run Practice Phase BEFORE scanner trigger wait
        if args.practice > 0 and not args.skip_instructions:
            trial_counter = engine.run_practice_phase(
                levels, args, win, core, event, visual, sound,
                psy_writer, psy_file, rng, trial_counter, exp_clock, markers
            )
        continueRoutine = False
  Routine TriggerWait
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    CodeComponent trigger_code
      Code Type = Py
      Begin Routine:
        if not args.fmri_mode:
            continueRoutine = False
        else:
            markers.send('trigger_wait_start', 105)
            dummy_n = getattr(args, 'dummy_scans', 5)
            tr_val = getattr(args, 'tr_s', 2.0)
            wait_s = dummy_n * tr_val
            msg = f'fMRI Scanner Session\n\nWaiting for scanner trigger...\n\n(Equilibration: {dummy_n} TRs = {wait_s:.1f}s)'
            trigger_text.setText(msg)
      End Routine:
        if args.fmri_mode:
            args.trigger_onset_global = exp_clock.getTime()
            markers.send('trigger_received', 106)
    TextComponent trigger_text
      text = Waiting for scanner trigger...
      height = 0.045
      units = height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.dummy_scans * args.tr_s if 'args' in locals() and hasattr(args, 'dummy_scans') else 11.0
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    KeyboardComponent trigger_key
      allowedKeys = 'space', 's', '4', '9'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.dummy_scans * args.tr_s if 'args' in locals() and hasattr(args, 'dummy_scans') else 11.0
      forceEndRoutine = True
  Routine TrialRoutine
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    ImageComponent fixation
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/plus.png
      size = (0.075, 0.075)
      units = height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent left_mask
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
      pos = (-0.42, 0)
      size = (0.32, 0.41)
      units = height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
    ImageComponent right_mask
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
      pos = (0.42, 0)
      size = (0.32, 0.41)
      units = height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
    ImageComponent target_stim
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/faa01.png
      pos = (-0.42, 0)
      size = (0.32, 0.41)
      units = height
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
    ImageComponent top_distractor
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
      pos = (-0.18, 0.34)
      size = (0.12, 0.085)
      units = height
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
    ImageComponent bottom_distractor
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/resources/cb.png
      pos = (-0.18, -0.34)
      size = (0.12, 0.085)
      units = height
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.24
    KeyboardComponent response_key
      allowedKeys = 'left', 'right', 'z', 'slash', '1', '2', '4', '9'
      startVal [time (s)] = 0.24
      stopVal [duration (s)] = 0.70
      forceEndRoutine = False
    CodeComponent trial_runner
      Code Type = Py
      Begin Experiment:
        trials = []
      Begin Routine:
        # ==============================================================================
        # ANGEL MAIN SESSION CONTROLLER
        # ==============================================================================
        active_trials, baseline_trials = engine.parse_trials_per_block(args.trials_per_block)
        block_trial_count = active_trials + baseline_trials
        total_main_trials = args.blocks * block_trial_count
        for level in levels:
            assets = assets_by_level[level]
            stimuli = engine.make_stimuli(win, visual, assets)
            audio_cache = engine.make_audio_cache(sound, assets)
            block_rows = []
            for trial in engine.generate_level_trials(
                level, args.blocks, rng, args.category_set,
                args.paired_tone_offset_mode, args.paired_tone_offset_min,
                args.paired_tone_offset_max, args.cd_schedule,
                active_trials, baseline_trials, args.level2_cd
            ):
                if trial.trial_in_block == 1:
                    markers.send('block_start', 1)
                trial_counter += 1
                block_name = f'level{level}_block{trial.block:02d}'
                row = engine.run_trial(
                    trial, args, win, core, event, visual, sound, stimuli,
                    assets, audio_cache, rng, trial_counter, exp_clock, markers, block_name
                )
                row['phase'] = 'main'
                block_rows.append(row)
                main_session_rows.append(row)
                for k, v in row.items():
                    thisExp.addData(k, v)
                thisExp.nextEntry()
                # Mid-block feedback (only if show_feedback is True)
                if getattr(args, 'show_feedback', True) and trial.trial_in_block == block_trial_count and trial.block % getattr(args, 'feedback_frequency', 2) == 0:
                    markers.send('feedback_start', 107)
                    engine.show_feedback(
                        win, event, visual, sound, assets['language'],
                        block_rows[-2 * block_trial_count:],
                        len(block_rows), total_main_trials
                    )
                    markers.send('feedback_end', 108)
                # Level 2 Reversal Rule Slide (at halfway point)
                if level == '2' and trial.block == args.blocks // 2 and trial.trial_in_block == block_trial_count:
                    markers.send('reversal_rule_start', 109)
                    rev_text = 'Rule change\n\nMeaningful: RIGHT\nAmbiguous: LEFT'
                    if getattr(args, 'passive_mode', False):
                        rev_text += '\n\nContinuing automatically...'
                    else:
                        rev_text += f'\n\nPress {engine._continue_hint()} to continue'
                    reversal = visual.TextStim(win, text=rev_text, color='white', height=0.04, units='height')
                    reversal.draw()
                    win.flip()
                    engine.wait_for_continue(event, timeout=getattr(args, 'slide_timeout', 5.0))
                    markers.send('reversal_rule_end', 110)
            # Level Session Summary (only if show_feedback is True)
            if getattr(args, 'show_feedback', True):
                engine.show_session_summary(win, event, visual, sound, assets['language'], block_rows, label=f'Level {level} Session')
        # Export fMRI Events CSV, Marker Log, and Trigger Codes JSON
        from pathlib import Path
        if hasattr(thisExp, 'dataFileName') and thisExp.dataFileName:
            csv_p = Path(thisExp.dataFileName + '.csv')
            markers_p = csv_p.with_name(csv_p.stem + '_markers.csv')
            markers.save_log(markers_p)
            trig_json_p = csv_p.with_name(csv_p.stem + '_trigger_codes.json')
            markers.save_trigger_codes_json(trig_json_p, participant=getattr(args, 'participant', ''))
            try:
                markers.save_trigger_codes_json(csv_p.parent / 'angel_trigger_codes.json', participant=getattr(args, 'participant', ''))
            except Exception:
                pass
            if getattr(args, 'fmri_mode', False) and getattr(args, 'trigger_onset_global', None) is not None:
                events_p = csv_p.with_name(csv_p.stem + '_fmri_events.csv')
                engine.save_fmri_events(events_p, main_session_rows, args.trigger_onset_global)
        continueRoutine = False
  Routine Feedback
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        if not getattr(args, 'show_feedback', True):
            continueRoutine = False
        else:
            if getattr(args, 'passive_mode', False):
                feedback_text.setText('Session Complete!\n\nContinuing automatically...')
    ImageComponent feedback_image
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/FeedbackGoodjob.PNG
      pos = (0, 0.14)
      size = (1.05, 0.78)
      units = height
      startVal [time (s)] = 0.0
    TextComponent feedback_text
      pos = (0, -0.34)
      height = 0.035
      units = height
      startVal [time (s)] = 0.0
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      text:
        Session Complete!
        Press any key to continue...
    KeyboardComponent feedback_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
  Routine End
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    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        markers.send('experiment_end', 99)
    ImageComponent end_image
      image = EPrimeFiles/CCS_EEG_ANGELv2_Level2_Template/english/ExperimentEnd.PNG
      size = (1.333, 1.0)
      units = height
      startVal [time (s)] = 0.0
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    KeyboardComponent end_key
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $args.slide_timeout if 'args' in locals() and args.slide_timeout > 0 else ''
      forceEndRoutine = True
Flow
  Routine Init
  Routine Instructions
  Routine PracticeRoutine
  Routine TriggerWait
  Routine TrialRoutine
  Routine Feedback
  Routine End
